PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {'participant':'', 'session':'01'}
  Units = norm
  Save excel file = True
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = stroop
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'down', 'right'
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please press;
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Let's start with a few practice trials

        Press any key to continue
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = conditions_spanish.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('text', u'red'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'cong')]),
      OrderedDict([('text', u'red'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'cong')]),
      OrderedDict([('text', u'red'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', u'incong')]),
      OrderedDict([('text', u'red'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', u'incong')]),
      OrderedDict([('text', u'green'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'incong')]),
      OrderedDict([('text', u'green'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', u'cong')]),
      OrderedDict([('text', u'green'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', u'cong')]),
      OrderedDict([('text', u'green'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', u'incong')]),
      OrderedDict([('text', u'blue'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'incong')]),
      OrderedDict([('text', u'blue'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', u'incong')]),
      OrderedDict([('text', u'blue'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', u'cong')]),
      OrderedDict([('text', u'blue'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', u'cong')])]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_spanish.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
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    conditions:
      [OrderedDict([('text', u'red'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'cong')]),
      OrderedDict([('text', u'red'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'cong')]),
      OrderedDict([('text', u'red'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', u'incong')]),
      OrderedDict([('text', u'red'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', u'incong')]),
      OrderedDict([('text', u'green'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'incong')]),
      OrderedDict([('text', u'green'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', u'cong')]),
      OrderedDict([('text', u'green'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', u'cong')]),
      OrderedDict([('text', u'green'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', u'incong')]),
      OrderedDict([('text', u'blue'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'incong')]),
      OrderedDict([('text', u'blue'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', u'incong')]),
      OrderedDict([('text', u'blue'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', u'cong')]),
      OrderedDict([('text', u'blue'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', u'cong')])]
    Routine trial
  LoopTerminator trials
  Routine thanks
