PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {'participant':'', 'session':'01'}
  Units = norm
  Save excel file = True
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = stroop_simple_spa
  logging level = warning
  Screen = 1
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Routines
  Routine assign_colours
    TextComponent colour_assignment
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Presiona:

        IZQUIERDA si las letras son ROJAS,
        DERECHA si las letras son VERDES.

        Pulsa cualquier tecla para empezar la práctica
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Bien! Has tardado %.2f s" %(resp.rt)
        else:
          msg="Oh, no! Te has equivocado."
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'down', 'right'
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        Bien. Preparado para comenzar?

        Recuerda, ignora la palabra!

        Presiona:

        IZQUIERDA si las letras son ROJAS,
        DERECHA si las letras son VERDES.

        (Esc para salir)

        Pulsa cualquier tecla para comenzar
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.2
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      text:
        Fin.

        Gracias!
  Routine instructPractice
    TextComponent instr1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        En este juego tienes que presionar una tecla según el color que tengan las letras.

        Vamos a empezar practicando un poco.

        Presiona cualquier tecla para seguir
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructPractice
  Routine assign_colours
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = conditions_red-green_spa.csv
    loopType = fullRandom
    nReps = 4
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    conditions:
      [OrderedDict([('text', u'rojo'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'cong')]),
      OrderedDict([('text', u'verde'), ('letterColor', u'green'), ('corrAns', u'right'), ('congruent', u'cong')]),
      OrderedDict([('text', u'verde'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'incong')]),
      OrderedDict([('text', u'rojo'), ('letterColor', u'green'), ('corrAns', u'right'), ('congruent', u'incong')])]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_red-green_spa.csv
    loopType = fullRandom
    nReps = 10
    endPoints = [1, 2]
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    conditions:
      [OrderedDict([('text', u'rojo'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'cong')]),
      OrderedDict([('text', u'verde'), ('letterColor', u'green'), ('corrAns', u'right'), ('congruent', u'cong')]),
      OrderedDict([('text', u'verde'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', u'incong')]),
      OrderedDict([('text', u'rojo'), ('letterColor', u'green'), ('corrAns', u'right'), ('congruent', u'incong')])]
    Routine trial
  LoopTerminator trials
  Routine thanks
